PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Delay Discounting
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      ori = 45
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"USD " + str(reward_today) + " today" + " or " + " USD " + str(future_reward) + " after " + str(delay) + " days"
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    TextComponent text_2
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.05
      pos = (-0.5, -0.3)
      startVal [time (s)] = 1
      text = Today
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    TextComponent text_3
      color = 1.0000, 0.9451, 0.7255
      letterHeight = 0.05
      pos = (0.5, -0.3)
      startVal [time (s)] = 1
      text = Later
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    MouseComponent mouse
      clickable = text_2, text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162}]
    Routine trial
  LoopTerminator trials
